OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class-blink-[2022.05.31-15.28.16].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter => #3
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_right_up_trainer-blink.cfg
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Up trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Stimulations=#2.Output stream 2, Features for class 1=#15, Features for class 2=#9 -> Classifier trainer "Right-Up Classifier"
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = D:/openvibe file/LED control/trainer&classifier/classifier_right_up-blink.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Right
  Class 2 label = OVTK_GDF_Up
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> 0x341d3912 Stimulation listener
  Log level to use = Information
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #18
#18.Output stream 1 -> CSP Spatial Filter => #19
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_left_up_trainer-blink.cfg
Input signal=#19, Input stimulations=#18.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #25
Input signal=#19, Input stimulations=#18.Output stream 2 -> Stimulation based epoching "Up trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #31
Stimulations=#18.Output stream 2, Features for class 1=#25, Features for class 2=#31 -> Classifier trainer "Left-Up Classifier"
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = D:/openvibe file/LED control/trainer&classifier/classifier_left_up-blink.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Up
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #34
#34.Output stream 1 -> CSP Spatial Filter => #35
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_Right_Left_trainer-blink.cfg
Input signal=#35, Input stimulations=#34.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #41
Input signal=#35, Input stimulations=#34.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #47
Stimulations=#34.Output stream 2, Features for class 1=#47, Features for class 2=#41 -> Classifier trainer "Left-Right Classifier"
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = D:/openvibe file/LED control/trainer&classifier/classifier_right_left-blink.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Right
  Class 2 label = OVTK_GDF_Left
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
