OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class-blink-[2022.05.31-15.28.16].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Stimulations=#2.Output stream 2, Signal condition 1=#4, Signal condition 2=#3 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = D:/openvibe file/LED control/trainer&classifier/csp_Right_Left_trainer-blink.cfg
  Filter dimension = 6
  Save as box config = true
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Up (Both)" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
Stimulations=#2.Output stream 2, Signal condition 1=#6, Signal condition 2=#3 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = D:/openvibe file/LED control/trainer&classifier/csp_right_up_trainer-blink.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Stimulations=#2.Output stream 2, Signal condition 1=#4, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = D:/openvibe file/LED control/trainer&classifier/csp_left_up_trainer-blink.cfg
  Filter dimension = 6
  Save as box config = true
