OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class--blink-online-[2022.05.31-15.31.39].ov
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output Signal -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Spatial Filter "Right Left CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_Right_Left_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Classifier processor "Right Left Classifier" => #9
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_left-blink.cfg
#2 -> Spatial Filter "Right Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_right_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Features=#15 -> Classifier processor "Right Up Classifier" => #16
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_up-blink.cfg
#2 -> Spatial Filter "Left Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_left_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Features=#22 -> Classifier processor "Left Up Classifier" => #23
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_left_up-blink.cfg
In1=#9.Probability values, In2=#16.Probability values, In3=#23.Probability values, Stim=#0.Output Stimulations -> 0x341d3912 Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = E:/Matlab2021b/bin/win64/MATLAB.exe
  Matlab working directory = D:/openvibe file/LED control/MatlabScripts
  Initialize function = threeclass_probability_Matrix_Initialize
  Process function = threeclass_probability_Matrix_Process
  Uninitialize function = threeclass_probability_Matrix_Uninitialize
