OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class-blink-[2022.05.14-15.48.37].ov
#0.Output Signal -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output Stimulations -> Switch director => #3
  Lua Script = D:/openvibe file/LED control/Scripts/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#3, Matrix=#1 -> Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#4.Output -> Spatial Filter "Right Left CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_Right_Left_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor "Right Left Classifier" => #11
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_left-blink.cfg
#0.Output Stimulations -> Switch director => #12
  Lua Script = D:/openvibe file/LED control/Scripts/motor-imagery-bci-epoch-selector-switch-R-U.lua
  offset = 0.5
  duration = 4.0
Triggers=#12, Matrix=#1 -> Stream Switch => #13
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#13.Output -> Spatial Filter "Right Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_right_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #19
Features=#19 -> Classifier processor "Right Up Classifier" => #20
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_up-blink.cfg
#0.Output Stimulations -> Switch director => #21
  Lua Script = D:/openvibe file/LED control/Scripts/motor-imagery-bci-epoch-selector-switch-L-U.lua
  offset = 0.5
  duration = 4.0
Triggers=#21, Matrix=#1 -> Stream Switch => #22
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#22.Output -> Spatial Filter "Left Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_left_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #28
Features=#28 -> Classifier processor "Left Up Classifier" => #29
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_left_up-blink.cfg
Input 1=#11.Probability values, Input 2=#20.Probability values, Input 3=#29.Probability values -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Input stream 2=#0.Output Stimulations -> Identity => #31
Stimulations=#31.Output stream 2, Amplitude=#11.Hyperplane distance -> Left-Right
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 4
  Positive feedback only = false
Stimulations=#31.Output stream 2, Amplitude=#20.Hyperplane distance -> Up-Right
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 4
  Positive feedback only = false
Stimulations=#31.Output stream 2, Amplitude=#29.Hyperplane distance -> Left-Up
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 4
  Positive feedback only = false
#31.Output stream 2 -> 0x341d3912 Stimulation Filter => #35
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
  Action to perform(2) = Select
  Stimulation range begin(2) = OVTK_GDF_Up
  Stimulation range end(2) = OVTK_GDF_Up
Targets=#35, Classification results=#11.Labels -> 0x341d3912 Confusion Matrix
  Percentages = false
  Sums = true
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
  Class 3 = OVTK_GDF_Up
-> 0x341d3912 Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

0x341d3912 Stimulation Filter => #38
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#38 -> 0x341d3912 Confusion Matrix
  Percentages = false
  Sums = true
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> 0x341d3912 Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#38 -> 0x341d3912 Accuracy Measure

0x341d3912 Stimulation Filter => #42
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#42 -> 0x341d3912 Confusion Matrix
  Percentages = false
  Sums = true
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> 0x341d3912 Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#42 -> 0x341d3912 Accuracy Measure
