OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

0x341d3912 Generic stream reader
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class-[2022.05.14-13.01.12].ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Right-Left CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_Right_Left_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Left-Right Classifier processor => #9
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_left-blink.cfg
#2 -> Right Up CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_right_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Features=#15 -> Up-Right Classifier processor => #16
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_right_up-blink.cfg
#2 -> Left Up CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/openvibe file/LED control/trainer&classifier/csp_left_up_trainer-blink.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Features=#22 -> Up-Left Classifier processor => #23
  Filename to load configuration from = D:/openvibe file/LED control/trainer&classifier/classifier_left_up-blink.cfg
In1=#9.Probability values, In2=#16.Probability values, In3=#23.Probability values -> 0x341d3912 Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = E:/Matlab2021b/bin/win64/MATLAB.exe
  Matlab working directory = D:/openvibe file/LED control/MatlabScripts
  Initialize function = threeclass_probability_Matrix_Initialize
  Process function = Stim_prob_dem_Process2
  Uninitialize function = threeclass_probability_Matrix_Uninitialize
  Output stimulations = false
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input 1=#9.Probability values, Input 2=#16.Probability values, Input 3=#23.Probability values -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Generic stream writer
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class--blink-online-[$core{date}-$core{time}].ov
  Use compression = false
Motor Imagery BCI Stimulator => #28
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 3
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
  Third Class = OVTK_GDF_Up
Stimulations=#28, Amplitude=#9.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
