OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 3
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
  Third Class = OVTK_GDF_Up
Stimulations=#0 -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = false
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> 0xc73e83ec Stimulation listener "Debug: Generated timeline"
  Log level to use = Information
#0 -> 0x341d3912 Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_GDF_End_Of_Trial
  File to play = ${Player_ScenarioDirectory}/ov_beep.wav
  Loop = false
#0 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = ${Player_ScenarioDirectory}/Resources/Greek_Cross_Left_Big.png
  Stimulation 1 = OVTK_GDF_Left
  Cue Image 2 = ${Player_ScenarioDirectory}/Resources/Greek_Cross_Right_Big.png
  Stimulation 2 = OVTK_GDF_Right
  Cue Image 3 = ${Player_ScenarioDirectory}/Resources/Greek_Cross_Up_Big.png
  Stimulation 3 = OVTK_GDF_Up
  Cue Image 4 = ${Player_ScenarioDirectory}/Resources/Greek_Cross_Big.png
  Stimulation 4 = OVTK_GDF_Cross_On_Screen

Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#5.Signal stream -> Temporal filter => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Data=#6, Stimulations=#5.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#5.Stimulations -> Generic stream writer
  Filename = D:/openvibe file/LED control/Signal/motor-imagery-csp-3-class-blink-[$core{date}-$core{time}].ov
  Use compression = false
#5.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
